<?xml version="1.0" encoding="UTF-8" standalone="yes"?>
<SDRun xmlns:xi="http://www.w3.org/2001/XInclude" xmlns="http://stochdiff.textensor.org">

  <ReactionScheme>
    <Specie name="A" kdiff="5e-08" kdiffunit = "cm2/s"/>
    <Specie name="B" kdiff="5e-08" kdiffunit = "cm2/s"/>
    <Reaction>
      <Reactant specieID="A"   />
      <Reactant specieID="B"   />
      <forwardRate> 1e-4  </forwardRate>
    </Reaction>
  </ReactionScheme>

  <xi:include href="ic.xml" />

  <Morphology>
    <Segment   id="seg0"    region="edge">
      <start x="0"  y="0" z="0" r="0.2" />
      <end   x=".4" y="0" z="0" r="0.2" />
    </Segment>
    <Segment   id="seg1"    region="rest">
      <start on="seg0" at="end" r="0.2" />
      <end   x="40" y="0" z="0" r="0.2" />
    </Segment>
  </Morphology>

  <runtime> 100000 </runtime>

  <depth2D> 0.4 </depth2D>

  <discretization>
    <!-- default largest size for elements in bulk volumes, microns -->
    <defaultMaxElementSide>0.4</defaultMaxElementSide>
  </discretization>

  <simulationSeed>77777</simulationSeed>
  <spineSeed>123</spineSeed>

  <outputInterval>   1000   </outputInterval>
  <tolerance> 0.01 </tolerance>
  <calculation> GRID_ADAPTIVE  </calculation>
</SDRun>
